CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Rectangles
    Typical diameter of objects, in pixel units (Min,Max):2,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.07,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:180
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    Thresholding method:Otsu

OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Rectangles

SaveImages:[module_num:7|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
    Select the type of image to save:Movie
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Tile:[module_num:8|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
    Select an input image:DNA
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:3
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:DNA
    Select an additional image to tile:Overlay

SaveImages:[module_num:9|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
    Select the type of image to save:Movie
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tile
    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Rectangles
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/Scope Data/Hao_pHFiber_1_pH1815minutespH35and375_1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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